# Custom log file

output_file out = new output_file;
string custom_fname = logfile.filename();
custom_fname = custom_fname.replace(logfile_directory, "");
custom_fname = custom_fname.replace(".log", "-custom.txt");
out.open( custom_fname );  

# Stimuli

string title = cet_file.get_line();
string left = cet_file.get_line();
string right = cet_file.get_line();
string cet_code = cet_file.get_string();
bool is_choice = cet_file.last_succeeded();

# Begin procedure

double end_time;
int conf;
int confirmation_left;
int confirmation_right;

loop
until
	!is_choice
begin
	
	empty_trial.present();

	fix_trial.set_start_delay(cet_file.get_int()); # jitter
	fix_trial.present();
	
	# Set CET trial to be displayed
	title_txt.set_caption(title);
	title_txt.redraw();
	left_txt.set_caption(left);
	left_txt.redraw();
	right_txt.set_caption(right);
	right_txt.redraw();
	resp_l.set_color(250, 243, 240);
	resp_r.set_color(250, 243, 240);
	
	# Set event code
	cet_event.set_event_code(cet_code);
	
	# Display trial & record information in the custom log

	conf = 0;
	confirmation_left = response_manager.response_count(1);
	confirmation_right = response_manager.response_count(2);

	end_time = clock.time() + 10000; # trial duration
	cet_trial.present();
	
	loop until clock.time() > end_time
	begin
		if response_manager.response_count(1) > confirmation_left && conf == 0 then
			conf = 1;
			resp_l.set_color(90, 169, 230);
			out.print(cet_code);
			out.print_line("	LEFT");
		elseif response_manager.response_count(2) > confirmation_right && conf == 0 then
			conf = 1;
			resp_r.set_color(90, 169, 230);
			out.print(cet_code);
			out.print_line("	RIGHT");
		end;
		choice.present();
	end;
	
	if response_manager.response_count() == 0 then
		out.print(cet_code);
		out.print_line("	NONE");
	end;
	
	# Prepare for the next trial
	title = cet_file.get_line();
	left = cet_file.get_line();
	right = cet_file.get_line();
	cet_code = cet_file.get_string();
	is_choice = cet_file.last_succeeded();
	
end;