## Simple objects

picture {
	text {
		caption = "Czy masz jakieś pytania?";
		font_color = 250, 243, 240;
		font_size = 36;
	};
	x = 0; y = 0;
} wait_for_researcher;

picture {
	text {
		caption = "Czekam na sygnał skanera...";
		font_color = 250, 243, 240;
		font_size = 36;
	};
	x = 0; y = 0;
} wait_for_scanner;

picture {
	text {
		caption = "+";
		font_size = 96;
		font_color = 250, 243, 240; 
	};
	x = 0; y = 0;
} fix_pic;

picture {
	text {
		caption = "Koniec badania. Za chwilę pomożemy Ci wyjść ze skanera.";
	font_color = 250, 243, 240; 
	};
	x = 0; y = 0;
} the_end_pic;

picture {
   
   # Response highlight

   box {
    height = 600;
    width = 800;
    color = 90, 169, 230; } resp_l;
   x = -450; y = -50;
   box {
    height = 600;
    width = 800;
    color = 90, 169, 230; } resp_r;
   x = 450; y = -50;

	# Title and boxes

	box { color = 250, 243, 240; height = 500; width = 800; } box_l;
	x = -450; y = -50;
	box { color = 250, 243, 240; height = 500; width = 800; } box_r;
	x = 450; y = -50;
	text	{
			caption = "title";
			font_color = 250, 243, 240;
			} title_txt;
			x=0; y=400;
			
	# Options

	text {
			caption = "left";
			background_color = 250, 243, 240;
			max_text_width = 500;
			} left_txt;
			x=-450; y=0;
	text {
			caption = "right";
			background_color = 250, 243, 240;
			max_text_width = 500;
			} right_txt;
			x=450; y=0;

} choice;

## Trial objects

trial {
	trial_duration = forever;
	trial_type = specific_response;
	terminator_button = 3;
	picture wait_for_researcher;
} wait_for_researcher_trial;

trial {
	picture wait_for_scanner;

	nothing{};
	time = 0;
	mri_pulse = 1;
} wait_for_scanner_trial;

trial {
	stimulus_event {
      picture {};
		duration = 500;
   };
} empty_trial;

trial{
	stimulus_event {
		picture fix_pic;
		time = 0;
		duration = 2500;
	} fix_event;
} fix_trial;

trial {
	stimulus_event {
		picture choice;
		code = "trial";
	} cet_event;
} cet_trial;

trial {
	stimulus_event {
		picture the_end_pic;
		time = 0;
		duration = 10000;
	};
} the_end_trial;